CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:nuclei
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nuclei
    Name the primary objects to be identified:macro
    Typical diameter of objects, in pixel units (Min,Max):60,400
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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