CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:cells
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:inverted
    Image or measurement?:Image
    Select the first image:cells
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:inverted
    Name the primary objects to be identified:yeast
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Automatic
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:yeast
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:8|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
    Select the input objects:ShrunkenNuclei
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:CellImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:cells
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Desktop\\\\\\\\screen\\\\\\\\masks
    Image bit depth:8
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder|
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